'CR1000 Series Datalogger
' Bob Busey & Bill Cable for:
' NGEE Barrow Intensive Site ________C________
' This program is just the Fall 2012 program
' I'll do a second one once we get the full complement of instrumentation in.  
' The wiring will need to change some.
' Draft V1.1
' Creation Dates: 2012-08-16
' Modified: 2012-09-20
' Modified: 2013-01-09 fixed HFP bugs

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''  FALL SENSOR LIST (As Built)   ''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' 2 -- HFP01 Heat Flux Plates
' 6 -- Vitel HydraProbe II Probes
' 6 -- East30 Sensors Thermal Conductivity Probes 
' 5 -- 16 point thermistor strings
' 6 -- thermistors to be installed adjacent to the soil moisture probes
' 1 -- 5 point shallow borehole 
' 1 -- 107 Air Temperature
' 2 or 3 -- SR50A Snow Depth



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''  LOGGER WIRING   ''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

' SE1  -- 
' SE2  -- 
' SE3  -- 
' SE4  -- 
' SE5  -- 
' SE6  -- 
' SE7  --
' SE8  -- 107 Probe Signal (Red Wire)
' SE9  -- 
' SE10 --
' SE11 -- 
' SE12 -- 
' SE13 -- AM16/32B #1 COM ODD HI, Precision Resistor to VX2
' SE14 -- AM16/32B #1 COM ODD LO, Precision Resistor to VX2
' SE15 -- AM16/32B #2 COM ODD HI, Precision Resistor to VX3
' SE16 -- AM16/32B #2 COM ODD LO, Precision Resistor to VX3

' VX1 -- 107 Probe Excitation (Black Wire)
' VX2 -- Precision resistors to Mux 2 COM ODD HI, SE1, COM ODD LO, SE2
' VX3 -- Precision resistors to Mux 3 COM ODD HI, SE1, COM ODD LO, SE2

' P1 -- 
' P2 -- 

' C1 -- 
' C2 -- AM16/32B #1 -- RES
' C3 -- AM16/32B #2 -- RES
' C4 -- AM16/32B #1 & 2 -- CLK
' C5 -- SDI 12 Devices Part 1 (6 Vitel Probes ) (Blue Wire)
' C6 -- Vitel Probe CONTROL (Run to SW12V Control for Vitel Probes)
' C7 -- SDI 12 Devices Part 2 (2 or 3 SR50A ) (Green Wire)
' C8 -- Thermal Conductivity Control
' SW12V -- Radio Power

' Signal Ground -- HFP01 Shields (Clear Wire), 107 Probe SG (Purple Wire), SR50A 
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
''   Sensor Wiring   ''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Thermistor Probes
'therm  depth  wire color
'  1     2       blue
'  2     5       white
'  3     10      orange
'  4     15      white
'  5     20      green
'  6     25      white
'  7     30      brown
'  8     35      white
'  9     40      slate
'  10    50      white
'  11    60      blue
'  12    70      red
'  13    80      orange
'  14    100     red
'  15    125     green
'  16    150     red
' signal ground  black & black

' Shallow Borehole
'therm  depth  wire color
'  1      2.0    blue
'  2      2.5    orange
'  3      3.0    green
'  4      3.5    white
'  5      4.0    red
' signal ground black

' Soil Pit Thermistor Triples
' therm  wire color
'  1        white
'  2        red
'  3        green
' signal ground black
 
' 107 Probe
' Black Wire -- CR1000 VX1
' Red Wire  -- CR1000 SE8
' Purple Wire -- CR1000 Signal Ground
' Clear Wire -- CR1000 Signal Ground

' HFP01
' White Wire -- AM16/32B HI  28 & 29
' Green Wire -- AM16/32B LO  28 & 29
' Clear Wire -- AM16/32B Signal Ground

' SR50A
' Black Wire -- CR1000 Power Ground
' Red Wire -- CR1000 +12V
' Green Wire -- CR1000 C7
' White Wire -- CR1000 Ground
' Clear Wire -- CR1000 Ground

' HydraProbe II
' Red Wire -- SW12V dongle +12V
' Black Wire -- CR1000 Ground
' Blue Wire -- CR1000 C5
' SW12V for this sensor should be wired into C6

' East30 Thermal Conductivity Sensors
' Purple Wire -- AM16/32B #2 Odd group HI
' Red Wire -- AM16/32B #2 Odd group LO
' Blue Wire -- AM16/32B #2 Even Group HI
' Gray Wire -- AM16/32B #2 Even Group LO, jumper to Signal Ground
' Black Wire -- Current Excitation Module (one per channel)

' AM16/32B #1 in 2/32 Mode
' RES - CR1000 C2
' CLK - CR1000 C1
' 12V  - CR1000 12V
' G    - CR1000 G
' COM ODD HI - CR1000 SE13,  Precision Resistor to CR1000 VX2
' COM ODD LO - CR1000 SE14,  Precision Resistor to CR1000 VX2
' AM16/32B GROUPS 1 - 8   -- Deep Thermistor Probe 1 -- TP1229
' AM16/32B GROUPS 9 - 16  -- Deep Thermistor Probe 2 -- TP1227
' AM16/32B GROUPS 17 - 24 -- Deep Thermistor Probe 3 -- TP1204
' AM16/32B GROUPS 25 - 32 -- Deep Thermistor Probe 4 -- TP1209

' AM16/32B #2 in 2/32 Mode
' RES - CR1000 C3
' CLK - CR1000 C1
' 12V  - CR1000 12V
' G    - CR1000 G
' COM ODD HI - CR1000 SE15,  Precision Resistor to CR1000 VX3
' COM ODD LO - CR1000 SE16,  Precision Resistor to CR1000 VX3
' AM16/32B GROUP 1 & 2     -- Thermal Conductivity Pit 1 Probe 1 -- S/N 1151
' AM16/32B GROUP 3 & 4     -- Thermal Conductivity Pit 1 Probe 2 -- S/N 1155
' AM16/32B GROUP 5 & 6     -- Thermal Conductivity Pit 1 Probe 3 -- S/N 1190
' AM16/32B GROUP 7 & 8     -- Thermal Conductivity Pit 2 Probe 1 -- S/N 1194
' AM16/32B GROUP 9 & 10    -- Thermal Conductivity Pit 2 Probe 2 -- S/N ????
' AM16/32B GROUP 11 & 12   -- Thermal Conductivity Pit 2 Probe 3 -- S/N 1192
' AM16/32B GROUP 13 - 20   -- Deep Thermistor Probe 5 -- TP1207
' AM16/32B GROUP 21 - 23.1 -- Shallow Thermistor Probe -- TS1202
' AM16/32B GROUP 23.2      -- Pit 1 Thermistor 1 -- TT1206
' AM16/32B Group 24.1      -- Pit 1 Thermistor 2
' AM16/32B Group 24.2      -- Pit 1 Thermistor 3
' AM16/32B Group 25.1      -- Pit 2 Thermistor 1 -- TT1201
' AM16/32B Group 25.2      -- Pit 2 Thermistor 2
' AM16/32B Group 26.1      -- Pit 2 Thermistor 3
' AM16/32B Group 26.2      -- Pit 3 Thermistor 1 -- Not installed Fall 2012
' AM16/32B Group 27.1      -- Pit 3 Thermistor 2
' AM16/32B Group 27.2      -- Pit 3 Thermistor 3
' AM16/32B Group 28        -- HFP01 Pit 1 -- S/N 3898
' AM16/32B Group 29        -- HFP01 Pit 2 -- S/N 3870
' AM16/32B Group 30        -- HFP01 Pit 3

''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
'' Declare Public Variables ''
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
    ''' Diagnostic Variables
    Public batt_volt
    Public Ptemp
    Public p_sig    
    Public Flag(8) As Boolean
    Public radioflag As Boolean  
    Public commscomplete As Boolean
    
    ''' Thermistor Related Variables
    Public Thermistors_Mux1(64), Thermistors_offset_Mux1(64)   ' thermistors on AM16/32B #1
    Public Thermistors_Mux2(30), Thermistors_offset_Mux2(30)   ' thermistors on AM16/32B #2    
    Public TP_Rt, TP_ratio      ' thermistor voltage to resistance variables
    
    ''' Vitel Probes
    Public Hydra(9,9) '9 parameters from the Hydra Probe's II
    Public Hydra_moisture(9), Hydra_temp(9), Hydra_cond(9), Hydra_real_perm(9), Hydra_img_perm(9)
    Public HydraRaw(9,5) ' The voltage values
    Public HydraA(9)   ' Voltage A
    Public HydraB(9)   ' Voltage B
    Public HydraC(9)   ' Voltage C
    Public HydraD(9)   ' Voltage D
    Public HydraE(9)   ' Voltage E
    ''' Snow Related
    Public Raw_Dist_1, Distance_1, SnowDepth_1, SR50A_height_1
    Public Raw_Dist_2, Distance_2, SnowDepth_2, SR50A_height_2
    Public Raw_Dist_3, Distance_3, SnowDepth_3, SR50A_height_3    
    Public AirTemp
    Public hTime
    
    ''' Heat Flux
    Public shf(3)
    
    ''' Thermal Conductivity    
    Public generator
    Public expgener
    Public sum
    Public tc
    Public Vref
    Public sqVref
    Public Tinitial(6)
    Public Theat(6)
    Public time (6)
    Public Trise (6)
    Public power(6)
    Public heater(6)
    Public measureTC As Boolean

    ''' Extras
    Dim i,j,k 
    Public muxincr
    Public i1
    Public i2
    

    
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
'' Aliases  ''''''''''''''''''
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
'Alias Thermisters_Mux1
Alias Thermistors_Mux1( 1) = Deep_Probe_1_Thermistor_1
Alias Thermistors_Mux1( 2) = Deep_Probe_1_Thermistor_2
Alias Thermistors_Mux1( 3) = Deep_Probe_1_Thermistor_3
Alias Thermistors_Mux1( 4) = Deep_Probe_1_Thermistor_4
Alias Thermistors_Mux1( 5) = Deep_Probe_1_Thermistor_5
Alias Thermistors_Mux1( 6) = Deep_Probe_1_Thermistor_6
Alias Thermistors_Mux1( 7) = Deep_Probe_1_Thermistor_7
Alias Thermistors_Mux1( 8) = Deep_Probe_1_Thermistor_8
Alias Thermistors_Mux1( 9) = Deep_Probe_1_Thermistor_9
Alias Thermistors_Mux1( 10) = Deep_Probe_1_Thermistor_10
Alias Thermistors_Mux1( 11) = Deep_Probe_1_Thermistor_11
Alias Thermistors_Mux1( 12) = Deep_Probe_1_Thermistor_12
Alias Thermistors_Mux1( 13) = Deep_Probe_1_Thermistor_13
Alias Thermistors_Mux1( 14) = Deep_Probe_1_Thermistor_14
Alias Thermistors_Mux1( 15) = Deep_Probe_1_Thermistor_15
Alias Thermistors_Mux1( 16) = Deep_Probe_1_Thermistor_16

Alias Thermistors_Mux1( 17) = Deep_Probe_2_Thermistor_1
Alias Thermistors_Mux1( 18) = Deep_Probe_2_Thermistor_2
Alias Thermistors_Mux1( 19) = Deep_Probe_2_Thermistor_3
Alias Thermistors_Mux1( 20) = Deep_Probe_2_Thermistor_4
Alias Thermistors_Mux1( 21) = Deep_Probe_2_Thermistor_5
Alias Thermistors_Mux1( 22) = Deep_Probe_2_Thermistor_6
Alias Thermistors_Mux1( 23) = Deep_Probe_2_Thermistor_7
Alias Thermistors_Mux1( 24) = Deep_Probe_2_Thermistor_8
Alias Thermistors_Mux1( 25) = Deep_Probe_2_Thermistor_9
Alias Thermistors_Mux1( 26) = Deep_Probe_2_Thermistor_10
Alias Thermistors_Mux1( 27) = Deep_Probe_2_Thermistor_11
Alias Thermistors_Mux1( 28) = Deep_Probe_2_Thermistor_12
Alias Thermistors_Mux1( 29) = Deep_Probe_2_Thermistor_13
Alias Thermistors_Mux1( 30) = Deep_Probe_2_Thermistor_14
Alias Thermistors_Mux1( 31) = Deep_Probe_2_Thermistor_15
Alias Thermistors_Mux1( 32) = Deep_Probe_2_Thermistor_16

Alias Thermistors_Mux1( 33) = Deep_Probe_3_Thermistor_1
Alias Thermistors_Mux1( 34) = Deep_Probe_3_Thermistor_2
Alias Thermistors_Mux1( 35) = Deep_Probe_3_Thermistor_3
Alias Thermistors_Mux1( 36) = Deep_Probe_3_Thermistor_4
Alias Thermistors_Mux1( 37) = Deep_Probe_3_Thermistor_5
Alias Thermistors_Mux1( 38) = Deep_Probe_3_Thermistor_6
Alias Thermistors_Mux1( 39) = Deep_Probe_3_Thermistor_7
Alias Thermistors_Mux1( 40) = Deep_Probe_3_Thermistor_8
Alias Thermistors_Mux1( 41) = Deep_Probe_3_Thermistor_9
Alias Thermistors_Mux1( 42) = Deep_Probe_3_Thermistor_10
Alias Thermistors_Mux1( 43) = Deep_Probe_3_Thermistor_11
Alias Thermistors_Mux1( 44) = Deep_Probe_3_Thermistor_12
Alias Thermistors_Mux1( 45) = Deep_Probe_3_Thermistor_13
Alias Thermistors_Mux1( 46) = Deep_Probe_3_Thermistor_14
Alias Thermistors_Mux1( 47) = Deep_Probe_3_Thermistor_15
Alias Thermistors_Mux1( 48) = Deep_Probe_3_Thermistor_16

Alias Thermistors_Mux1( 49) = Deep_Probe_4_Thermistor_1
Alias Thermistors_Mux1( 50) = Deep_Probe_4_Thermistor_2
Alias Thermistors_Mux1( 51) = Deep_Probe_4_Thermistor_3
Alias Thermistors_Mux1( 52) = Deep_Probe_4_Thermistor_4
Alias Thermistors_Mux1( 53) = Deep_Probe_4_Thermistor_5
Alias Thermistors_Mux1( 54) = Deep_Probe_4_Thermistor_6
Alias Thermistors_Mux1( 55) = Deep_Probe_4_Thermistor_7
Alias Thermistors_Mux1( 56) = Deep_Probe_4_Thermistor_8
Alias Thermistors_Mux1( 57) = Deep_Probe_4_Thermistor_9
Alias Thermistors_Mux1( 58) = Deep_Probe_4_Thermistor_10
Alias Thermistors_Mux1( 59) = Deep_Probe_4_Thermistor_11
Alias Thermistors_Mux1( 60) = Deep_Probe_4_Thermistor_12
Alias Thermistors_Mux1( 61) = Deep_Probe_4_Thermistor_13
Alias Thermistors_Mux1( 62) = Deep_Probe_4_Thermistor_14
Alias Thermistors_Mux1( 63) = Deep_Probe_4_Thermistor_15
Alias Thermistors_Mux1( 64) = Deep_Probe_4_Thermistor_16

'Alias Thermisters_Mux2
Alias Thermistors_Mux2( 1) = Deep_Probe_5_Thermistor_1
Alias Thermistors_Mux2( 2) = Deep_Probe_5_Thermistor_2
Alias Thermistors_Mux2( 3) = Deep_Probe_5_Thermistor_3
Alias Thermistors_Mux2( 4) = Deep_Probe_5_Thermistor_4
Alias Thermistors_Mux2( 5) = Deep_Probe_5_Thermistor_5
Alias Thermistors_Mux2( 6) = Deep_Probe_5_Thermistor_6
Alias Thermistors_Mux2( 7) = Deep_Probe_5_Thermistor_7
Alias Thermistors_Mux2( 8) = Deep_Probe_5_Thermistor_8
Alias Thermistors_Mux2( 9) = Deep_Probe_5_Thermistor_9
Alias Thermistors_Mux2( 10) = Deep_Probe_5_Thermistor_10
Alias Thermistors_Mux2( 11) = Deep_Probe_5_Thermistor_11
Alias Thermistors_Mux2( 12) = Deep_Probe_5_Thermistor_12
Alias Thermistors_Mux2( 13) = Deep_Probe_5_Thermistor_13
Alias Thermistors_Mux2( 14) = Deep_Probe_5_Thermistor_14
Alias Thermistors_Mux2( 15) = Deep_Probe_5_Thermistor_15
Alias Thermistors_Mux2( 16) = Deep_Probe_5_Thermistor_16

Alias Thermistors_Mux2( 17) = Shallow_Hole_Thermistor_1
Alias Thermistors_Mux2( 18) = Shallow_Hole_Thermistor_2
Alias Thermistors_Mux2( 19) = Shallow_Hole_Thermistor_3
Alias Thermistors_Mux2( 20) = Shallow_Hole_Thermistor_4
Alias Thermistors_Mux2( 21) = Shallow_Hole_Thermistor_5

Alias Thermistors_Mux2( 22) = Pit_1_Thermistor_1
Alias Thermistors_Mux2( 23) = Pit_1_Thermistor_2
Alias Thermistors_Mux2( 24) = Pit_1_Thermistor_3

Alias Thermistors_Mux2( 25) = Pit_2_Thermistor_1
Alias Thermistors_Mux2( 26) = Pit_2_Thermistor_2
Alias Thermistors_Mux2( 27) = Pit_2_Thermistor_3

Alias Thermistors_Mux2( 28) = Pit_3_Thermistor_1
Alias Thermistors_Mux2( 29) = Pit_3_Thermistor_2
Alias Thermistors_Mux2( 30) = Pit_3_Thermistor_3

Alias shf(1) = Pit_1_HeatFlux
Alias shf(2) = Pit_2_HeatFlux
Alias shf(3) = Pit_3_HeatFlux

''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
'' Declare Constants '''''''''
''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''
    'Steinhart-Hart Fit Constants
    Const C1 = 0.0011281
    Const C2 = 0.0002343
    Const C3 = 0.000000086946
    Const Rf = 25000  ' Resistor Value
    Const HFP01_cal_1 = 1 / (65.6 / 1000)   'multiplier for HFP01, sensitivity (around 60 uV/Wm-2)    
    Const HFP01_cal_2 = 1 / (66.0 / 1000)   'multiplier for HFP01, sensitivity (around 60 uV/Wm-2)    
    

''''''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''''''
'' Define Units for the Output Variables  ''
''''''''''''''''''''''''''''''''''''''''''''
''''''''''''''''''''''''''''''''''''''''''''
    Units batt_volt = Volts DC
    Units Ptemp = Degrees Celsius
    Units SnowDepth_1 = Centimeters
    Units SnowDepth_2 = Centimeters    
    Units SnowDepth_3 = Centimeters        
    Units Thermistors_Mux1 = Degrees Celsius
    Units Thermistors_Mux2 = Degrees Celsius
    Units AirTemp = Degrees Celsius   
    Units shf = Watts / meter^2 
    ' Could optionally add units for the HydraProbes.
    
'''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''
'' Define Data Output Tables ''
'''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''

    DataTable (Diagnostic,1,-1)
      DataInterval (0,1440,Min,10)
      Minimum (1,batt_volt,FP2,False,False)
      Minimum (1,PTemp,FP2,False,False)
      Average (1,PTemp,FP2,False)
      Maximum (1,PTemp,FP2,False,False)
      Sample (1,p_sig,IEEE4)        
    EndTable
    
    DataTable(Subsurface,true,-1)
      DataInterval(0,60,Min,10)
      Minimum(1,batt_volt,FP2,False,False)
      Average(1,Ptemp,FP2, 0)      
      ' Thermistors
      Average(64,Thermistors_Mux1(),FP2,False)   
      Average(30,Thermistors_Mux2(),FP2,False)     
      'Hydra Probe's
      Sample(6,Hydra_moisture(),FP2)  'soil moisture, VWC
      Sample(6,Hydra_temp(),FP2)  'soil temperature, deg. C
      Sample(6,Hydra_cond(),FP2)  'soil conductivity, Siemens / Meter
      Sample(6,Hydra_real_perm(),FP2)  'real dielectric permittivity
      Sample(6,Hydra_img_perm(),FP2)  'imaginary dielectric permittivity
      Sample(6,HydraA(),FP2)   ' Hydra Probe Voltage A
      Sample(6,HydraB(),FP2)   ' Hydra Probe Voltage B
      Sample(6,HydraC(),FP2)   ' Hydra Probe Voltage C
      Sample(6,HydraD(),FP2)   ' Hydra Probe Voltage D
      Sample(6,HydraE(),FP2)   ' Hydra Probe Voltage E                        
      'soil heat flux plate
      Average(2,shf(),FP2,0) 
      ' snow 
      Average(1,AirTemp,fp2,false)
      Sample(1,SnowDepth_1,FP2)
      Sample(1,SnowDepth_2,FP2)      
      Sample(1,SnowDepth_3,FP2)        
    EndTable

    DataTable(Snow,true,-1)
      DataInterval(0,5,Min,10)
      Sample(1,SnowDepth_1,FP2)
      Sample (1,Distance_1,FP2)
      Sample(1,SnowDepth_2,FP2)
      Sample (1,Distance_2,FP2)
      Sample(1,SnowDepth_3,FP2)
      Sample (1,Distance_3,FP2)

    EndTable
    
    DataTable(TableTC,true,-1)
      Sample(6, time,IEEE4)
      Sample(6, Trise, FP2)
      Sample(6, power, FP2)
    EndTable
    
'''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''
'' Main Program '''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''
'''''''''''''''''''''''''''''''''''''''''''''''''''
BeginProg

  ''''''''''''''''''''''''''''''''''''''''''''''''''''
  ''''''''''''''''''''''''''''''''''''''''''''''''''''
  '' Initiazlize All of the offest parameters  '''''''
  ''''''''''''''''''''''''''''''''''''''''''''''''''''
  ''''''''''''''''''''''''''''''''''''''''''''''''''''
  Signature
  ' Snow
  SR50A_height_1 = 0  ' units are centimeters
  SR50A_height_2 = 0  ' units are centimeters
  SR50A_height_3 = 0  ' units are centimeters  
  commscomplete = false
  
  ' Thermistor offsets  
  Thermistors_offset_Mux1 ( 1  ) = 0.035 '' Bore Hole - 1 Thermistor _1_ TP1229
  Thermistors_offset_Mux1 ( 2  ) = 0.037 '' Bore Hole - 1 Thermistor _2_ TP1229
  Thermistors_offset_Mux1 ( 3  ) = 0.043 '' Bore Hole - 1 Thermistor _3_ TP1229
  Thermistors_offset_Mux1 ( 4  ) = 0.040 '' Bore Hole - 1 Thermistor _4_ TP1229
  Thermistors_offset_Mux1 ( 5  ) = -0.025 '' Bore Hole - 1 Thermistor _5_ TP1229
  Thermistors_offset_Mux1 ( 6  ) = -0.004 '' Bore Hole - 1 Thermistor _6_ TP1229
  Thermistors_offset_Mux1 ( 7  ) = 0.005 '' Bore Hole - 1 Thermistor _7_ TP1229
  Thermistors_offset_Mux1 ( 8  ) = 0.046 '' Bore Hole - 1 Thermistor _8_ TP1229
  Thermistors_offset_Mux1 ( 9  ) = -0.014 '' Bore Hole - 1 Thermistor _9_ TP1229
  Thermistors_offset_Mux1 ( 10 ) = 0.002 '' Bore Hole - 1 Thermistor _10_ TP1229
  Thermistors_offset_Mux1 ( 11 ) = 0.016 '' Bore Hole - 1 Thermistor _11_ TP1229
  Thermistors_offset_Mux1 ( 12 ) = 0.032 '' Bore Hole - 1 Thermistor _12_ TP1229
  Thermistors_offset_Mux1 ( 13 ) = 0.024 '' Bore Hole - 1 Thermistor _13_ TP1229
  Thermistors_offset_Mux1 ( 14 ) = 0.061 '' Bore Hole - 1 Thermistor _14_ TP1229
  Thermistors_offset_Mux1 ( 15 ) = 0.035 '' Bore Hole - 1 Thermistor _15_ TP1229
  Thermistors_offset_Mux1 ( 16 ) = 0.006 '' Bore Hole - 1 Thermistor _16_ TP1229
      
  Thermistors_offset_Mux1 ( 17 ) = 0.013 '' Bore Hole - 2 Thermistor _1_ TP1227
  Thermistors_offset_Mux1 ( 18 ) = 0.15 '' Bore Hole - 2 Thermistor _2_ TP1227
  Thermistors_offset_Mux1 ( 19 ) = 0.019 '' Bore Hole - 2 Thermistor _3_ TP1227
  Thermistors_offset_Mux1 ( 20 ) = 0.004 '' Bore Hole - 2 Thermistor _4_ TP1227
  Thermistors_offset_Mux1 ( 21 ) = 0.061 '' Bore Hole - 2 Thermistor _5_ TP1227
  Thermistors_offset_Mux1 ( 22 ) = -0.032 '' Bore Hole - 2 Thermistor _6_ TP1227
  Thermistors_offset_Mux1 ( 23 ) = 0.028 '' Bore Hole - 2 Thermistor _7_ TP1227
  Thermistors_offset_Mux1 ( 24 ) = 0.045 '' Bore Hole - 2 Thermistor _8_ TP1227
  Thermistors_offset_Mux1 ( 25 ) = -0.03 '' Bore Hole - 2 Thermistor _9_ TP1227
  Thermistors_offset_Mux1 ( 26 ) = 0.069 '' Bore Hole - 2 Thermistor _10_ TP1227
  Thermistors_offset_Mux1 ( 27 ) = 0.039 '' Bore Hole - 2 Thermistor _11_ TP1227
  Thermistors_offset_Mux1 ( 28 ) = -0.008 '' Bore Hole - 2 Thermistor _12_ TP1227
  Thermistors_offset_Mux1 ( 29 ) = 0.011 '' Bore Hole - 2 Thermistor _13_ TP1227
  Thermistors_offset_Mux1 ( 30 ) = 0.005 '' Bore Hole - 2 Thermistor _14_ TP1227
  Thermistors_offset_Mux1 ( 31 ) = 0.029 '' Bore Hole - 2 Thermistor _15_ TP1227
  Thermistors_offset_Mux1 ( 32 ) = -0.026 '' Bore Hole - 2 Thermistor _16_ TP1227
      
  Thermistors_offset_Mux1 ( 33 ) = 0.053 '' Bore Hole - 3 Thermistor _1_ TP1204
  Thermistors_offset_Mux1 ( 34 ) = 0.046 '' Bore Hole - 3 Thermistor _2_ TP1204
  Thermistors_offset_Mux1 ( 35 ) = 0.019 '' Bore Hole - 3 Thermistor _3_ TP1204
  Thermistors_offset_Mux1 ( 36 ) = 0.047 '' Bore Hole - 3 Thermistor _4_ TP1204
  Thermistors_offset_Mux1 ( 37 ) = -0.036 '' Bore Hole - 3 Thermistor _5_ TP1204
  Thermistors_offset_Mux1 ( 38 ) = 0.003 '' Bore Hole - 3 Thermistor _6_ TP1204
  Thermistors_offset_Mux1 ( 39 ) = 0.046 '' Bore Hole - 3 Thermistor _7_ TP1204
  Thermistors_offset_Mux1 ( 40 ) = 0.004 '' Bore Hole - 3 Thermistor _8_ TP1204
  Thermistors_offset_Mux1 ( 41 ) = 0.009 '' Bore Hole - 3 Thermistor _9_ TP1204
  Thermistors_offset_Mux1 ( 42 ) = 0.018 '' Bore Hole - 3 Thermistor _10_ TP1204
  Thermistors_offset_Mux1 ( 43 ) = 0.037 '' Bore Hole - 3 Thermistor _11_ TP1204
  Thermistors_offset_Mux1 ( 44 ) = 0.013 '' Bore Hole - 3 Thermistor _12_ TP1204
  Thermistors_offset_Mux1 ( 45 ) = 0.089 '' Bore Hole - 3 Thermistor _13_ TP1204
  Thermistors_offset_Mux1 ( 46 ) = 0.010 '' Bore Hole - 3 Thermistor _14_ TP1204
  Thermistors_offset_Mux1 ( 47 ) = 0.004 '' Bore Hole - 3 Thermistor _15_ TP1204
  Thermistors_offset_Mux1 ( 48 ) = 0.017 '' Bore Hole - 3 Thermistor _16_ TP1204
      
  Thermistors_offset_Mux1 ( 49 ) = 0.041 '' Bore Hole - 4 Thermistor _1_ TP1209
  Thermistors_offset_Mux1 ( 50 ) = 0.127 '' Bore Hole - 4 Thermistor _2_ TP1209
  Thermistors_offset_Mux1 ( 51 ) = 0.019 '' Bore Hole - 4 Thermistor _3_ TP1209
  Thermistors_offset_Mux1 ( 52 ) = 0.045 '' Bore Hole - 4 Thermistor _4_ TP1209
  Thermistors_offset_Mux1 ( 53 ) = 0.048 '' Bore Hole - 4 Thermistor _5_ TP1209
  Thermistors_offset_Mux1 ( 54 ) = 0.024 '' Bore Hole - 4 Thermistor _6_ TP1209
  Thermistors_offset_Mux1 ( 55 ) = -0.009 '' Bore Hole - 4 Thermistor _7_ TP1209
  Thermistors_offset_Mux1 ( 56 ) = 0.046 '' Bore Hole - 4 Thermistor _8_ TP1209
  Thermistors_offset_Mux1 ( 57 ) = -0.006 '' Bore Hole - 4 Thermistor _9_ TP1209
  Thermistors_offset_Mux1 ( 58 ) = 0.035 '' Bore Hole - 4 Thermistor _10_ TP1209
  Thermistors_offset_Mux1 ( 59 ) = -0.006 '' Bore Hole - 4 Thermistor _11_ TP1209
  Thermistors_offset_Mux1 ( 60 ) = 0.014 '' Bore Hole - 4 Thermistor _12_ TP1209
  Thermistors_offset_Mux1 ( 61 ) = 0.018 '' Bore Hole - 4 Thermistor _13_ TP1209
  Thermistors_offset_Mux1 ( 62 ) = 0.062 '' Bore Hole - 4 Thermistor _14_ TP1209
  Thermistors_offset_Mux1 ( 63 ) = 0.021 '' Bore Hole - 4 Thermistor _15_ TP1209
  Thermistors_offset_Mux1 ( 64 ) = 0.046 '' Bore Hole - 4 Thermistor _16_ TP1209
      
  Thermistors_offset_Mux2 ( 1 ) = 0.026 '' Bore Hole - 5 Thermistor _1_ TP1207
  Thermistors_offset_Mux2 ( 2 ) = 0.054 '' Bore Hole - 5 Thermistor _2_ TP1207
  Thermistors_offset_Mux2 ( 3 ) = -0.004 '' Bore Hole - 5 Thermistor _3_ TP1207
  Thermistors_offset_Mux2 ( 4 ) = 0.024 '' Bore Hole - 5 Thermistor _4_ TP1207
  Thermistors_offset_Mux2 ( 5 ) = 0.046 '' Bore Hole - 5 Thermistor _5_ TP1207
  Thermistors_offset_Mux2 ( 6 ) = 0.046 '' Bore Hole - 5 Thermistor _6_ TP1207
  Thermistors_offset_Mux2 ( 7 ) = 0.030 '' Bore Hole - 5 Thermistor _7_ TP1207
  Thermistors_offset_Mux2 ( 8 ) = -0.008 '' Bore Hole - 5 Thermistor _8_ TP1207
  Thermistors_offset_Mux2 ( 9 ) = 0.033 '' Bore Hole - 5 Thermistor _9_ TP1207
  Thermistors_offset_Mux2 ( 10 ) = 0.019 '' Bore Hole - 5 Thermistor _10_ TP1207
  Thermistors_offset_Mux2 ( 11 ) = -0.024 '' Bore Hole - 5 Thermistor _11_ TP1207
  Thermistors_offset_Mux2 ( 12 ) = 0.055 '' Bore Hole - 5 Thermistor _12_ TP1207
  Thermistors_offset_Mux2 ( 13 ) = 0.036 '' Bore Hole - 5 Thermistor _13_ TP1207
  Thermistors_offset_Mux2 ( 14 ) = 0.002 '' Bore Hole - 5 Thermistor _14_ TP1207
  Thermistors_offset_Mux2 ( 15 ) = 0.035 '' Bore Hole - 5 Thermistor _15_ TP1207
  Thermistors_offset_Mux2 ( 16 ) = -0.010 '' Bore Hole - 5 Thermistor _16_ TP1207
      
  Thermistors_offset_Mux2 ( 17 ) = 0.033 '' Shallow Hole - Thermistor _1_ TS1202
  Thermistors_offset_Mux2 ( 18 ) = -0.010 '' Shallow Hole - Thermistor _2_ TS1202
  Thermistors_offset_Mux2 ( 19 ) = 0.045 '' Shallow Hole - Thermistor _3_ TS1202
  Thermistors_offset_Mux2 ( 20 ) = 0.034 '' Shallow Hole - Thermistor _4_ TS1202
  Thermistors_offset_Mux2 ( 21 ) = 0.034 '' Shallow Hole - Thermistor _5_ TS1202
      
  Thermistors_offset_Mux2 ( 22 ) = 0.005 '' Pit 1 Thermistor _1 _ TT1206
  Thermistors_offset_Mux2 ( 23 ) = -0.005 '' Pit 1 Thermistor _2 _ TT1206
  Thermistors_offset_Mux2 ( 24 ) = 0.005 '' Pit 1 Thermistor _3 _ TT1206
      
  Thermistors_offset_Mux2 ( 25 ) = 0.029 '' Pit 2 Thermistor _1 _ TT1201
  Thermistors_offset_Mux2 ( 26 ) = 0.047 '' Pit 2 Thermistor _2 _ TT1201
  Thermistors_offset_Mux2 ( 27 ) = 0.003 '' Pit 2 Thermistor _3 _ TT1201
      
  Thermistors_offset_Mux2 ( 28 ) = 0 '' Pit 3 Thermistor _1 _ n/a
  Thermistors_offset_Mux2 ( 29 ) = 0 '' Pit 3 Thermistor _2 _ n/a
  Thermistors_offset_Mux2 ( 30 ) = 0 '' Pit 3 Thermistor _3 _ n/a


  heater(1) = 1041.5  '' East 30 Pit 1 - Heater #1 Resistance
  heater(2) = 1041.5  '' East 30 Pit 1 - Heater #2 Resistance
  heater(3) = 1041.5  '' East 30 Pit 1 - Heater #3 Resistance
  heater(4) = 1041.5  '' East 30 Pit 2 - Heater #1 Resistance
  heater(5) = 1041.5  '' East 30 Pit 2 - Heater #2 Resistance
  heater(6) = 1041.5  '' East 30 Pit 2 - Heater #3 Resistance
  
  Scan(60,Sec, 10, 0)

    '''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''
    '' Diagnostic Measurements  '''''
    '''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''    
    Battery(batt_volt)
    PanelTemp(Ptemp,_60Hz)
    p_sig = Signature

    ''''''''''''''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''''''''''''
    '' Radio and Thermal Conducitivity Control  ''''''''
    ''''''''''''''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''''''''''''
      ' if the battery voltage is high then turn the radio on hourly 
      ' also allow the thermal conductivity sensors to be measured
      if radioflag=true then sw12(1)
      If TimeIntoInterval(0,60,min) Then
        If batt_volt >= 12.4 Then 
          SW12(1)
          measureTC = true
        EndIf
      EndIf
      ' if the battery voltage isn't too low, turn the radio on daily.
      If TimeIntoInterval(720,1440,min) Then
        If batt_volt >= 12.2 Then 
          SW12(1)
          measureTC = true
        EndIf
      EndIf
      ' if the radioflag hasn't been set manually then turn the radio off 10 minutes into the hour.
      If TimeIntoInterval(10,60,min) OR commscomplete = true Then
        If radioflag = false Then 
          SW12(0)
          commscomplete = false
        EndIf
      EndIf      
      ' radioflag is used to leave the radio turned on all the time (typically used remotely)
      If batt_volt < 12.6 Then radioflag = false
      
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '' Measure Thermistor Probes on Multiplexer #1 ''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''   
    If TimeIntoInterval (0,10,Min) Then
      PortSet(2,1)  'Multiplexer #1 ON
      i = 1
      SubScan(0,uSec,32)
        PulsePort(4,10000)
        BrHalf (TP_ratio, 1, mV2500, 13, Vx2, 1, 2500, False, 0, 250,1.0,0)
        TP_Rt = Rf*(TP_ratio/(1-TP_ratio))  'calculate resistance
        Thermistors_Mux1(i) = 1/(C1+C2*LN(TP_Rt)+C3*LN(TP_Rt)^3) - 273.15 - Thermistors_offset_Mux1(i)  'calculate temperature with correction for zero offset
  
        BrHalf (TP_ratio, 1, mV2500, 14, Vx2, 1, 2500, False, 0, 250, 1.0, 0)
        TP_Rt = Rf*(TP_ratio/(1-TP_ratio))  'calculate resistance
        Thermistors_Mux1(i+1) = 1/(C1+C2*LN(TP_Rt)+C3*LN(TP_Rt)^3) - 273.15 - Thermistors_offset_Mux1(i+1)  'calculate temperature with correction for zero offset
        i = i+2      
      NextSubScan
      PortSet(2,0 )  'Multiplexer #1 OFF
    EndIf
    
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '' Measure Thermistor Probes on Multiplexer #2 ''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''        
    If TimeIntoInterval (0,10,Min) Then
      PortSet(3,1)  'Multiplexer #2 ON
      i = 1
      SubScan(0,uSec,12)
        ' Loop through the Thermal Conductivity Probes
        PulsePort(4,10000)
      NextSubScan
      SubScan(0,uSec,15)
        PulsePort(4,10000)
        BrHalf (TP_ratio, 1, mV2500, 15, Vx3, 1, 2500, False, 0, 250,1.0,0)
        TP_Rt = Rf*(TP_ratio/(1-TP_ratio))  'calculate resistance
        Thermistors_Mux2(i) = 1/(C1+C2*LN(TP_Rt)+C3*LN(TP_Rt)^3) - 273.15 - Thermistors_offset_Mux2(i)  'calculate temperature with correction for zero offset
  
        BrHalf (TP_ratio, 1, mV2500, 16, Vx3, 1, 2500, False, 0, 250, 1.0, 0)
        TP_Rt = Rf*(TP_ratio/(1-TP_ratio))  'calculate resistance
        Thermistors_Mux2(i+1) = 1/(C1+C2*LN(TP_Rt)+C3*LN(TP_Rt)^3) - 273.15 - Thermistors_offset_Mux2(i+1)  'calculate temperature with correction for zero offset
        i = i+2      
      NextSubScan
      PortSet(3,0)  'Multiplexer #2 OFF
    EndIf
    '''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''    
    '' Measure the Heat Flux Plate HFP01   ''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''    
    If TimeIntoInterval(0,10,min) Then
      PortSet(3,1)
      i = 1
      SubScan(0,usec,27)
        'loop through the thermal conductivity probes and thermistors
        PulsePort(4,10000)
      NextSubScan
      SubScan(0,sec,3)    
        PulsePort(4,10000)    
        VoltDiff(shf(i),1,mV25C,8,True,200,250,1,0)
        i = i + 1
      NextSubScan
      PortSet(3,0)
      ' Convert mV to W/m^2
      shf(1) = shf(1) * HFP01_cal_1
      shf(2) = shf(2) * HFP01_cal_2
      'shf(3) = shf(3) * HFP01_cal_3
    EndIf        
    '''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''
    '' Measure the SR50a snow sensor(s)  ''''
    '''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''' 
    Therm107 (AirTemp,1,8,Vx1,0,250,1.0,0)
           
    If  TimeIntoInterval(0,5,Min) Then
      SDI12Recorder(Raw_Dist_1,7, 0, "C!", 100, 0)        ' Units are Centimeters
      Distance_1 = Raw_Dist_1*SQR((AirTemp+273.15)/273.15)	' Temperature Correction for distance
      SnowDepth_1 = SR50A_height_1 - Distance_1
      SDI12Recorder(Raw_Dist_2,7,1, "C!", 100, 0)        ' Units are Centimeters
      Distance_2 = Raw_Dist_2*SQR((AirTemp+273.15)/273.15)	' Temperature Correction for distance
      SnowDepth_2 = SR50A_height_2 - Distance_2
      SDI12Recorder(Raw_Dist_3,7,2, "C!", 100, 0)        ' Units are Centimeters
      Distance_3 = Raw_Dist_3*SQR((AirTemp+273.15)/273.15)	' Temperature Correction for distance
      SnowDepth_3 = SR50A_height_3 - Distance_3

    EndIf
    
    ''''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''    
    '' Measure Hydra II Probes  ''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''
    ''''''''''''''''''''''''''''''''''''''''''    
    If  TimeIntoInterval(0,30,Min) Then
      Timer(1,msec,2)
      PortSet(6,1)
      Delay (0,5,Sec)
      k = 1
      SubScan(0,uSec,9)
        SDI12Recorder (Hydra(k,1),5,k,"M!",1.0,0) 'read 9 soil parameters
        SDI12Recorder (HydraRaw(k,1),5,k,"M4!",1.0,0) 'read 9 soil parameters
        'reassign things to more useful variables
        Hydra_moisture(k) = Hydra(k,1)
        Hydra_temp(k) = Hydra(k,3)
        Hydra_cond(k) = Hydra(k,5)
        Hydra_real_perm(k) = Hydra(k,6)
        Hydra_img_perm(k) = Hydra(k,7)
        HydraA(k) = HydraRaw(k,1)
        HydraB(k) = HydraRaw(k,2)
        HydraC(k) = HydraRaw(k,3)
        HydraD(k) = HydraRaw(k,4)
        HydraE(k) = HydraRaw(k,5)
        k = k+1
      NextSubScan
      PortSet(6,0)  'power off
      HTime = Timer(1,msec,4) / 1000
    EndIf


    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    ''' Measure the Thermal Conductivity Sensors  '''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''''''''''''''''''''''''''
    generator = 0
    sum = 0
    tc = 0
    If  TimeIntoInterval(0,1440,Min) Then 
      If measureTC = true Then
        Flag(1) = True         
      EndIf
    EndIf  
    If flag(1) = True Then    
      generator = 1
      sum = 2.72
      tc = 1
      ' steady state, iniital measurments
      PortSet (3,1)       ' turn on mux #2 & loop through the thermocouples
      SubScan(0,Sec,6)
        PulsePort (4, 10000)      
        TCDiff(Tinitial(tc),1,mV2_5C,8,TypeE,Ptemp,True,0,250,1,0)
        PulsePort (4, 10000)
        tc = tc + 1
      NextSubScan
      PortSet (3,0)       ' turn off mux #2
      Timer(0,Sec,2)      ' start the measurement timer
      PortSet (8,1)       ' turn heaters on 
      For i1 = 1 To 36                
        generator = generator + 0.1
        expgener = EXP(generator)
        ' an exponential delay algorithm 
        For i2 = 1 To 200 
          Delay (0,700,mSec)              
          sum = sum + 0.5
          If (sum >= expgener) Then      ExitFor       
        Next i2  
        ' loop through the thermal conductivity probes
        tc = 1
        muxincr = 1
        PortSet(3,1)  
        SubScan(0,Sec,12)
          ' erroring here 
          ' 'compile results: Warning: Variable Theat out of bounds'
          PulsePort(4,10000)
          TCDiff(Theat(tc),1,mV2_5C,8,TypeE,Ptemp,True,0,250,1,0)
          PulsePort(4,10000)
          VoltDiff(Vref, 1, mV250,8, True, 0, 250, 0.001, 0)  
          time(tc) = Timer(0,mSec,4) /1000
          Trise(tc) = Theat(tc) - Tinitial(tc)
          sqVref = Vref * Vref
          power (tc) = sqVref * heater(tc)
          tc = tc + 1
        NextSubScan
        PortSet(3,0)      
        CallTable TableTC
      Next i1
      ' turn off current excitation
      PortSet(8,0)    
      ' end of measurment
      Flag(1) = False    
      measureTC = false  
    EndIf
    
    
            
    '''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''
    '' Output to Storage  '''''''
    '''''''''''''''''''''''''''''
    '''''''''''''''''''''''''''''
    CallTable Subsurface
    CallTable Snow
    CallTable Diagnostic
    
  NextScan
EndProg
